CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Image(?P<ImgNo>[0-9]{3})_RAW_ch(?P<Channel>[0-9]{2}).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:\\wtbfiler\\Microsystems\\Promovendi-PD's\\Roel\\A2F3_4\\40x\\(?P<Sample>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "02")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "00")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Sample

RescaleIntensity:[module_num:5|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enabled:False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
    Select the input image:BF
    Name the output image:Rescaled_BF_smooth
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:DAPI
    Name the output image:Rescaled_DAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:Phalloidin
    Name the output image:Rescaled_phalloidin
    Rescaling method:Stretch each image to use the full intensity range
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Rescaled_DAPI
    Name the output image:Illum_dapi
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:Rescaled_phalloidin
    Name the output image:Illum_phalloidin
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:Rescaled_DAPI
    Name the output image:CorrDAPI
    Select the illumination function:Illum_dapi
    Select how the illumination function is applied:Subtract
    Select the input image:Rescaled_phalloidin
    Name the output image:CorrPhalloidin
    Select the illumination function:Illum_phalloidin
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:11|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BF_inverted
    Image or measurement?:Image
    Select the first image:Rescaled_BF_smooth
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:12|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enabled:False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
    Select the input image:BF_inverted
    Name the primary objects to be identified:Cilia
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:13|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enabled:False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
    Select object sets to measure:Cilia
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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enabled:False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
    Select the objects to filter:Cilia
    Name the output objects:Cilia_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_MedianRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:5
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:6
    Select the measurement to filter by:AreaShape_MinFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:16
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:150
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:Nuclei
    Name the objects to be identified:fActin
    Select the method to identify the secondary objects:Propagation
    Select the input image:Phalloidin
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:100
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    Thresholding method:Otsu

EditObjectsManually:[module_num:17|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
    Select the objects to be edited:fActin
    Name the edited objects:fActin_edit
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:Phalloidin
    Allow overlapping objects?:No

OverlayOutlines:[module_num:18|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_BF_smooth
    Name the output image:OverlayActin_on_cilia
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:fActin_edit

EditObjectsManually:[module_num:19|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enabled:False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
    Select the objects to be edited:Cilia_filtered
    Name the edited objects:Cilia_edit
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:OverlayActin_on_cilia
    Allow overlapping objects?:No

SaveCroppedObjects:[module_num:20|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
    Do you want to save cropped images or object masks?:Masks
    Objects:Nuclei
    Directory:Elsewhere...|D:\\A2F3\\A2F3_4\\40x\\Analysis\\Objects\\Nuclei
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:DAPI
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:None

SaveCroppedObjects:[module_num:21|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
    Do you want to save cropped images or object masks?:Masks
    Objects:fActin_edit
    Directory:Elsewhere...|D:\\A2F3\\A2F3_4\\40x\\Analysis\\Objects\\Actin
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:Phalloidin
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:None

SaveCroppedObjects:[module_num:22|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enabled:False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
    Do you want to save cropped images or object masks?:Masks
    Objects:Cilia_edit
    Directory:Elsewhere...|D:\\A2F3\\A2F3_4\\40x\\Analysis\\Objects\\Cilia
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:BF
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:None
