CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "Series")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Sample>.+)_Image(?P<ImgNo>[0-9]{3})_RAW_ch(?P<Channel>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "40x") (metadata does Channel "02")
    Name to assign these images:phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Analysis") (directory does contain "Objects")
    Name to assign these images:actin_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Sample

ConvertImageToObjects:[module_num:5|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notes:['Converts the actin supermask of eroded objects to CP objects']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
    Select the input image:actin_mask
    Name the output object:fActin
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

DilateObjects:[module_num:6|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notes:['Dilates the actin objects back to original size (before erosion step)']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
    Select the input object:fActin
    Name the output object:RestoredActin
    Structuring element:Disk,1

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:RestoredActin
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:phalloidin
    Select objects to measure:RestoredActin

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:phalloidin
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:RestoredActin
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|D:\\A2F3\\A2F3_4\\40x\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_4_4,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_4_2,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_4_0,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_7_1,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_7_3,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_7_7,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_7_5,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_2_0,RestoredActin|RadialDistribution_ZernikeMagnitude_phalloidin_2_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A2F3_2_CTRL_
    Overwrite existing files without warning?:No
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