CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channel": "text", "Condition": "text", "FileLocation": "text", "Frame": "integer", "FrameNo": "integer", "Series": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<Condition>.*)\\(?P<Channel>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:image_(?P<FrameNo>[0-9]{1,3}).*.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'BF': 'Condition', 'DNA': 'Condition', 'YAP': 'Condition', 'Illum_Nuclei': 'Condition', 'Illum_YAP': 'Condition'}, {'BF': 'FrameNo', 'DNA': 'FrameNo', 'Illum_Nuclei': 'FrameNo', 'Illum_YAP': 'FrameNo', 'YAP': 'FrameNo'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "Brightfield")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Nuclei")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "YAP")
    Name to assign these images:YAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Illumination functions_Nuclei")
    Name to assign these images:Illum_Nuclei
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does Channel "Illumination functions_YAP")
    Name to assign these images:Illum_YAP
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Condition

Smooth:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNA_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:6
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
CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:DNA_smooth
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumGreenDilated
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
CorrectIlluminationCalculate:[module_num:7|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enabled:False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
    Select the input image:YAP
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:600
    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumRedDilated
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:YAP
    Name the output image:CorrYAP
    Select the illumination function:Illum_YAP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:DNA_smooth
    Name the output image:CorrDNA
    Select the illumination function:Illum_Nuclei
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.26
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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enabled:False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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:CorrYAP, DNA, YAP
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\A2F4_MCF10a\\Cilia_Ctrl
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_09CorrectIlluminationApply,Image|ModuleError_11MeasureObjectSizeShape,Image|ModuleError_02Metadata,Image|ModuleError_01Images,Image|ModuleError_13MeasureObjectIntensity,Image|ModuleError_05Smooth,Image|ModuleError_04Groups,Image|ModuleError_03NamesAndTypes,Image|ModuleError_08CorrectIlluminationApply,Image|ModuleError_10IdentifyPrimaryObjects,Image|Group_Number,Image|Group_Length,Image|Group_Index,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_FinalThreshold_Nuclei,Image|Threshold_WeightedVariance_Nuclei,Image|URL_Illum_YAP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20250117_SegmentShapeDivideByIntensity
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:Yes
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    Name the output image:Nuclei_Outlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Nuclei_Outlines
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_2024050117
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\A2F4_MCF10a\\\g<Condition>\\Overlay images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:IllumGreenDilated
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_202450117_IllumBackgr60-500
    Saved file format:tiff
    Output file location:Same folder as image|D:\\A2F4_MCF10a\\Cilia_Ctrl\\Illumination functions
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:19|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:IllumRedDilated
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_20250117_IllumBackgr50-600
    Saved file format:tiff
    Output file location:Same folder as image|D:\\A2F4_MCF10a\\Cilia_Ctrl\\Illumination functions
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:20|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
    Do you want to save cropped images or object masks?:Masks
    Objects:Nuclei
    Directory:Elsewhere...|D:\\A2F4_MCF10a\\\g<Condition>\\Masks\\Updated
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:DNA
    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:None
